CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Pipeline adapted from Bray et al 2016 doi: 10.1038/nprot.2016.105', 'for Svenningsen, EB; Poulsen, TB; Bioorganic and Medicinal Chemistry 2019']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
    Filter images?:Custom
    Select the rule criteria:or (and (file doesnot contain "thumb") (file doesnot contain "_A") (file doesnot contain "_B") (file doesnot contain "_O") (file doesnot contain "_P") (file doesnot contain "01_") (file doesnot contain "02_") (file doesnot contain "23_") (file doesnot contain "24_"))

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The UserStem prefix, and the Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate ID, and optionally, the date of acquisition from the folder name. If needed, the regular expression can modified to collect the barcode ID as well.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Well>[a-pA-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to "Metadata" has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'No grouping is needed, so this module is not enabled.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:OrigRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Correct each image channel by dividing by the respective illumination correction image. See Singh et al. J Microscopy, 256(3): 231-6, 2014 for more details.']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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Subtract
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Subtract
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Subtract

MeasureImageQuality:[module_num:11|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notes:['Generate image quality measurements for all channels. Image features made here include image blur measurements at multiple spatial scales, saturation metrics, and intensity-based measures. See Bray et al. J Biomol Screen, 17(2):266-74, 2012 for more details. ']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:12|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notes:['In addition to the more general image QC features, collect the thresholds for the DNA and RNA images. We use these two channels because the DNA image is used for nuclei identification and the RNA image is used for cell body identification. Examining the histogram of these values is often helpful in setting the lower threshold bound, as well as getting a sense of what outliers look like.', '', 'Note that different threshold methods are calculated for each channel, although more could be added. Also note that even though the channels will be illumination corrected in the feature extraction pipeline, we have not found that it affects QC assessment substantially.']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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:AGP,DNA,ER,Mito,RNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:AGP,DNA,ER,Mito,RNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:13|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notes:['This module sets a metadata flag if an image set fails pre-selected quality control criteria. The quality control metrics should be evaluated with the prior quality control pipeline, and all measurements made in that pipeline should be available here by setting the MeasureImageQuality module(s) appropriately. ', '', 'NOTE: The image features and cutoffs set here are for illustrative purposes only; these should be adjusted after performing the quality control workflow; see Bray et al. J Biomol Screen, 17(2):266-74, 2012 for more details. If this module is not needed, it can be disabled by clicking the green checkmark to the left of the module name.']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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigDNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigER
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identify the nuclei based on the DNA image.', '', 'The settings here were chosen based on the image data and acqusition settings provided in Gustafsdottir et al, PLoS One 8, e80999, 2013. Changing the image acqusition settings may affect a number of these parameters:', '* Typical diameter of objects: From the display window menu, select Tools > Measure length. Click/drag to measure diameters of a few select nuclei.', '* Thresholding strategy: Global works fine in most cases, but Adaptive may work better if the background has non-uniform illumination. However, the illumination correction in CorrectIlluminationApply should mitigate the latter.', '* Thresholding method: Select the method which provides the best foreground/background separation. Adjust the threshold corrrection factor if the threshold is concistently above/below where you want it to be for most images tested. ', '* Lower threshold bound: Mouse over the background region to see the intensity variation in the lower-right of the display window.', '* Method to distinguish clumped objects: Use "Intensity" if the intensity gradient dividing touching nuclei are pretty clear, even if clumpy. Use "Shape" if the nuclei are usually well-separated (and "Intensity" doesn\\'t work).', '* Method to draw dividing lines between clumped objects: "Intensity" usually gives more realistic-looking boundary lines.', '* Size of smoothing filter/minimum distance between local maxima: Override defaults if nuclei are getting under/over-segmented.', '* Fill holes in identified objects: Currently set to "Never" since holes in nuclei may represent a phenotype. ']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,85
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.002,0.0625
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:15|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notes:['Identify the cells using the nuclei objects plus an image representative of the cell body. Several of the channels could suffice for this purpose, but we chose the RNA channel as optimal. Using the "Watershed-Image" option over the default "Propagate" methods seems to often better capture the cell boundaries, especially when the cells are confluent.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:AGP
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0035,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:16|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notes:['The cytoplasm is identified as the cell body "minus" the nuclei.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureCorrelation:[module_num:17|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notes:['Measure the intensity correlation between all channels, within all objects.']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
    Hidden:5
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Set threshold as percentage of maximum intensity for the images:25.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm

MeasureGranularity:[module_num:18|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notes:['Measure the granularity characteristics across all images. Note that this is a per-image measure, and therefore, will not appear in the per-well profiles generated by the per-cell features.']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
    Image count:5
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:ER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:AGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:RNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:19|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notes:['Measure the intensity characteristics from all channels, within all objects.']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
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:20|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notes:['Measure the adjacency statistics for the cells. Cells within 5 pixels of each other are considered neighbors.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:21|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notes:['Measure the adjacency statistics for the nuclei. Nuclei within 1 pixel of each other are considered neighbors.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:22|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notes:['Measure the adjacency statistics for the cells. Cells touching each other are considered neighbors.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:23|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notes:["Measure the radial intensity distribution characteristics in all objects. The object is 'binned' into radial annuli and statistics are measured for each bin."]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
    Hidden:4
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:24|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notes:['Measure the morpholigical features of all objects.']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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureTexture:[module_num:25|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notes:['Measure the texture features in all objects, against all 5 channels, using multiple spatial scales.']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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Texture scale to measure:5
    Angles to measure:Horizontal
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:No
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    Measure images or objects?:Both

OverlayOutlines:[module_num:26|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notes:['Overlay the nuclei outlines on a blank image. This is (optionally) used in CellProfiler Analyst for viewing segmentation results.']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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:27|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notes:['Overlay the cell outlines on a blank image. This is (optionally) used in CellProfiler Analyst for viewing segmentation results.']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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|\\\\\\\\g<Date>\\\\\\\\\\\\\\\\\\\\\\\\g<Plate>\\\\\\\\\\\\\\\\\\\\\\\\g<Well>\\\\\\\\\\\\\\\\\\\\\\\\g<Site>\\\\\\\\\\\\\\\\analysis_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ctrl_rep3_
    Overwrite existing files without warning?:Yes
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